<?xml version='1.0' encoding='UTF-8'?>
<!--
 This CellML file was generated by M. Ryzhii, University of Aizu 05/12/2021
***********
M. Ryzhii, University of Aizu, Japan
E. Ryzhii, Fukushima Medical University, Japan
(2022) "Pacemaking function of two simplified cell models"
PLoS ONE 17(4): e0257935. doi.org/10.1371/journal.pone.0257935 

 openCOR  https://opencor.ws/
 CellML 1.0 was used to generate this cellular model
 http://www.CellML.org/

 Original Aliev & Panfilov two-variable cardiac excitable cell model.
 Aliev RR,  Panfilov AV. A simple two-variable model of cardiac excitation. 
 Chaos Solitons Fractals. 1996; 7(3): 293&#45;&#45;301. 
 doi.org/10.1016/0960-0779(95)00089-5 
-->
<model name="aliev_panfilov_1996" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="millisecond">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_millisecond">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <component name="Main">
        <variable name="t" units="millisecond"/>
        <variable initial_value="0.001" name="u" units="dimensionless"/>
        <variable initial_value="0.001" name="v" units="dimensionless"/>
        <variable initial_value="0.0775" name="ct" units="dimensionless"/>
        <variable initial_value="0.13" name="a" units="dimensionless"/>
        <variable initial_value="0.002" name="eps0" units="dimensionless"/>
        <variable initial_value="100" name="IstimStart" units="dimensionless"/>
        <variable initial_value="110" name="IstimEnd" units="dimensionless"/>
        <variable initial_value="0.5" name="IstimAmplitude" units="dimensionless"/>
        <variable name="I" units="dimensionless"/>
        <variable initial_value="8.0" name="k" units="dimensionless"/>
        <variable initial_value="0.2" name="mu1" units="dimensionless"/>
        <variable initial_value="0.3" name="mu2" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I</ci>
                <piecewise>
                    <piece>
                        <ci>IstimAmplitude</ci>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>t</ci>
                                <ci>IstimStart</ci>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>t</ci>
                                <ci>IstimEnd</ci>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>u</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>ct</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>k</ci>
                                <ci>u</ci>
                                <apply>
                                    <minus/>
                                    <ci>u</ci>
                                    <ci>a</ci>
                                </apply>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <ci>u</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>u</ci>
                                <ci>v</ci>
                            </apply>
                        </apply>
                        <ci>I</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>ct</ci>
                    <apply>
                        <plus/>
                        <ci>eps0</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>v</ci>
                                <ci>mu1</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>u</ci>
                                <ci>mu2</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>v</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k</ci>
                            <ci>u</ci>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>u</ci>
                                    <ci>a</ci>
                                </apply>
                                <cn cellml:units="per_millisecond">1</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
