<?xml version='1.0' encoding='UTF-8'?>
<!--
 This CellML file was generated by M. Ryzhii, University of Aizu
 07/12/2021

 openCOR  https://opencor.ws/
 CellML 1.0 was used to generate this cellular model
 http://www.CellML.org/

 Pacemaking variant of the Aliev & Panfilov two-variable cell model. 
 Ryzhii M, Ryzhii E. Pacemaking function of two simplified cell models (2021).
 under review
 https://-->
<model name="oscillating_aliev_panfilov_1996" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <units name="millisecond">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="per_millisecond">
        <unit exponent="-1" prefix="milli" units="second"/>
    </units>
    <component name="Main">
        <variable name="t" units="millisecond"/>
        <variable initial_value="0.01" name="u" units="dimensionless"/>
        <variable initial_value="0.01" name="v" units="dimensionless"/>
        <variable initial_value="0.0775" name="ct" units="dimensionless"/>
        <variable initial_value="0.01" name="b" units="dimensionless"/>
        <variable initial_value="0.13" name="a" units="dimensionless"/>
        <variable initial_value="0.002" name="eps0" units="dimensionless"/>
        <variable name="I" units="dimensionless"/>
        <variable initial_value="8" name="k" units="dimensionless"/>
        <variable initial_value="0.2" name="mu1" units="dimensionless"/>
        <variable initial_value="0.3" name="mu2" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">0.0</cn>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>t</ci>
                                <cn cellml:units="millisecond">0</cn>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>t</ci>
                                <cn cellml:units="millisecond">0.5</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>u</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>ct</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>k</ci>
                                <ci>u</ci>
                                <apply>
                                    <plus/>
                                    <ci>u</ci>
                                    <ci>b</ci>
                                </apply>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <ci>u</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>u</ci>
                                <ci>v</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>ct</ci>
                    <apply>
                        <plus/>
                        <ci>eps0</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>v</ci>
                                <ci>mu1</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>u</ci>
                                <ci>mu2</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>v</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k</ci>
                            <ci>u</ci>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>u</ci>
                                    <ci>a</ci>
                                </apply>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>

</model>
